PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = motor sequence
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10,10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line_1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line_2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line_3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent line_4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2
      storeCorrect = True
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  Routine instructions
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        You will be shown 4 vertical lines and a triangle will pop on the top of either of the 4 lines.
        Your task is to detect the triangle on the line and press the key corresponding to it.

        Line 1 - z
        Line 2- x
        Line 3- c
        Line 4- v

        Left most is line 1 and the right most is line 4

        Press SPACE to begin the experiment
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you so much for your participation!

        Press SPACE to end the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_motor.csv
    loopType = sequential
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions_motor.csv
    loopType = fullRandom
    nReps = 50
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    conditions:
      [OrderedDict([('pos', np.int64(-50)), ('corr_resp', 'x')]),
      OrderedDict([('pos', np.int64(150)), ('corr_resp', 'v')]),
      OrderedDict([('pos', np.int64(50)), ('corr_resp', 'c')]),
      OrderedDict([('pos', np.int64(-150)), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials_2
  Routine thanks
